CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (file doesnot containregexp "t01")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<PlateID>Exp[0-9]{3}_20191123_Nikon2_FUCCI_siKD)
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<imageNr>[0-9]{3})c[0-9]{1}t(?P<tp>[0-9]{2}).tif
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    Extract metadata from:All images
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    Metadata extraction method:Import from file
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    Extract metadata from:All images
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    Metadata file location:Elsewhere...|F:\\E2S\\Analysis\\Exp233_20191123_Nikon2_FUCCI_siKD
    Match file and image metadata:[{'Image Metadata': u'imageNr', 'CSV Metadata': u'loc'}]
    Use case insensitive matching?:No
    Metadata file name:wellmetadata_233.csv
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "c1t") (file doesnot contain "wshed")
    Name to assign these images:image_hoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c4t") (file doesnot contain "wshed")
    Name to assign these images:image_h2b
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c3t") (file doesnot contain "wshed")
    Name to assign these images:image_cdt1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c2t") (file doesnot contain "wshed")
    Name to assign these images:image_geminin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c1t") (file does contain "wshed")
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    Name to assign these objects:nuclei
    Select the image type:Objects
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:well_name_p

MeasureObjectSizeShape:[module_num:5|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
    Select object sets to measure:nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:6|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
    Select images to measure:image_cdt1, image_geminin, image_h2b, image_hoechst
    Select objects to measure:nuclei

TrackObjects:[module_num:7|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
    Choose a tracking method:Overlap
    Select the objects to track:nuclei
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    Maximum pixel distance to consider matches:40
    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedCells_hoechst
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    Filter objects by lifetime?:No
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
TrackObjects:[module_num:8|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enabled:False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
    Choose a tracking method:Overlap
    Select the objects to track:nucleiH2B
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    Maximum pixel distance to consider matches:40
    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedCells_h2b
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    Filter objects by lifetime?:No
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
SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:TrackedCells_hoechst
    Select method for constructing file names:From image filename
    Select image name for file prefix:image_hoechst
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|TracksHoechst
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:10|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:TrackedCells_h2b
    Select method for constructing file names:From image filename
    Select image name for file prefix:image_h2b
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|TracksH2B
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToDatabase:[module_num:11|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:Table233_
    Output file location:Default Input Folder sub-folder|TracksHoechst
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:233_FUCCI_48hr_Hoechst.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Experiment name:233_FUCCI_48hr_Hoechst
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    Export object relationships?:Yes
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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